PsychoPy2experiment version="2020.2.4"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['姓名'], expName, expInfo['date'])
  Experiment info = {'姓名': '', '性别': '', '年龄': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [2194, 1234]
  color = $[-1,-1,-1]
  expName = foodChoice
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Routines
  Routine welc
    PolygonComponent rect_start
      fillColor = gray
      lineColor = black
      pos = (0, -490)
      saveStartStop = False
      shape = rectangle
      size = (150, 80)
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    TextComponent start_btn
      font = Songti SC
      languageStyle = Arabic
      letterHeight = 50
      pos = (0, -490)
      saveStartStop = False
      text = 开始
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    MouseComponent welc_mouse
      clickable = rect_start
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
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    ImageComponent guide_image
      image = guide.png
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    CodeComponent egi_init
      Code Type = Auto->JS
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      Before Experiment:
        # set to True before start egi exp
        netstation = False
        recording = False
      Begin Experiment:
        if netstation:
            import egi.simple as egi
            ns = egi.Netstation()
            print("import pynetstation")
            # set ip address
            ns.connect("10.10.10.42", 55513)
            ns.BeginSession()
            print("connected to netstation")
            if recording:
                ns.StartRecording()
                print("start recording")

        def send_to_NS(key_):
            if netstation:
                ns.sync()
                ns.send_event(key=key_)
  Routine ready
    PolygonComponent rect_ready
      fillColor = gray
      lineColor = black
      pos = (0, -490)
      saveStartStop = False
      shape = rectangle
      size = (150, 80)
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    TextComponent ready_btn
      font = Songti SC
      languageStyle = Arabic
      letterHeight = 50
      pos = (0, -490)
      saveStartStop = False
      text = 开始
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    MouseComponent ready_mouse
      clickable = rect_ready
      forceEndRoutineOnPress = valid click
      saveMouseState = never
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    CodeComponent code_ready
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
        send_to_NS(str(images.thisN).zfill(4))
  Routine thanks
    TextComponent text
      font = Songti SC
      letterHeight = 50
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text = 感谢参与！
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    CodeComponent egi_end
      Code Type = Auto->JS
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      Begin Routine:
        if netstation:
            if recording:
                ns.StopRecording()
            ns.EndSession()
            ns.disconnect()
  Routine image
    CodeComponent getTracking
      Code Type = Auto->JS
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      Begin Routine:
        x_list = []
        y_list = []
        t_list = []
        mouse.setPos([0, -490])

        # set mark
        response_mark = 500
        send_to_NS("0400")
      Each Frame:
        # get mouse track
        x_pos, y_pos = mouse.getPos()
        x_list.append(x_pos)
        y_list.append(y_pos)
        t_list.append(imageClock.getTime())
      End Routine:
        thisExp.addData('xTrajectory', x_list)
        thisExp.addData('yTrajectory', y_list)
        thisExp.addData('tTrajectory', t_list)
    MouseComponent mouse
      clickable = image_left, image_right
      forceEndRoutineOnPress = valid click
      saveMouseState = final
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    ImageComponent image_left
      image [set every repeat] = $left_image
      pos = (-760, 390)
      saveStartStop = False
      size = (400, 300)
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    ImageComponent image_right
      image [set every repeat] = $right_image
      pos = (760, 390)
      size = (400, 300)
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  Routine fixation
    TextComponent fixation_text
      font = Songti SC
      languageStyle = Arabic
      letterHeight = 100
      saveStartStop = False
      stopVal [duration (s)] = np.around(np.random.uniform(0.8, 1.5), 3)
      text = +
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  Routine display
    ImageComponent image_left_2
      image [set every repeat] = $left_image
      pos = (-760, 390)
      saveStartStop = False
      size = (400, 300)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    ImageComponent image_right_2
      image [set every repeat] = $right_image
      pos = (760, 390)
      size = (400, 300)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    CodeComponent setRect
      Code Type = Auto->JS
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      Begin Routine:
        if "image_left" in mouse.clicked_name:
            rect_pos = (-760, 390)
        else:
            rect_pos = (760, 390)
            response_mark += 1
        send_to_NS(str(response_mark).zfill(4))
      End Routine:
        win.mouseVisible = False
    PolygonComponent rect
      lineColor = blue
      lineWidth = 10
      pos [set every repeat] = $rect_pos
      saveStartStop = False
      shape = rectangle
      size = (400, 300)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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  Routine pause
    TextComponent pause_tip
      font = Songti SC
      letterHeight = 50
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      text:
        请等待主试按下空格键后开始实验
        在此期间您可休息片刻
    KeyboardComponent key_start
      allowedKeys = 'space'
      forceEndRoutine = True
      store = nothing
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    CodeComponent pause_code
      Code Type = Auto->JS
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      Begin Experiment:
        isPause = False
      Begin Routine:
        if images.thisN == 0 or images.thisN % 107 != 0:
            continueRoutine = False
        else:
            isPause = True
            if netstation and recording:
                ns.StopRecording()
                print("pause recording")
      End Routine:
        if isPause:
            isPause = False
            if netstation and recording:
                ns.StartRecording()
                print("start recording")
Flow
  Routine welc
  LoopInitiator images loopType="TrialHandler"
    conditionsFile = trialVar.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('left_image', 'images/0583.jpg'), ('right_image', 'images/0199.jpg')]),
      OrderedDict([('left_image', 'images/0546.jpg'), ('right_image', 'images/0489.jpg')]),
      OrderedDict([('left_image', 'images/0063.jpg'), ('right_image', 'images/0015.jpg')]),
      OrderedDict([('left_image', 'images/0126.jpg'), ('right_image', 'images/0499.jpg')]),
      OrderedDict([('left_image', 'images/0534.jpg'), ('right_image', 'images/0233.jpg')]),
      OrderedDict([('left_image', 'images/0426.jpg'), ('right_image', 'images/0197.jpg')]),
      OrderedDict([('left_image', 'images/0452.jpg'), ('right_image', 'images/0527.jpg')]),
      OrderedDict([('left_image', 'images/0543.jpg'), ('right_image', 'images/0498.jpg')]),
      OrderedDict([('left_image', 'images/0150.jpg'), ('right_image', 'images/0223.jpg')]),
      OrderedDict([('left_image', 'images/0435.jpg'), ('right_image', 'images/0504.jpg')]),
      OrderedDict([('left_image', 'images/0556.jpg'), ('right_image', 'images/0447.jpg')]),
      OrderedDict([('left_image', 'images/0486.jpg'), ('right_image', 'images/0521.jpg')]),
      OrderedDict([('left_image', 'images/0525.jpg'), ('right_image', 'images/0238.jpg')]),
      OrderedDict([('left_image', 'images/0173.jpg'), ('right_image', 'images/0440.jpg')]),
      OrderedDict([('left_image', 'images/0540.jpg'), ('right_image', 'images/0237.jpg')]),
      OrderedDict([('left_image', 'images/0538.jpg'), ('right_image', 'images/0208.jpg')]),
      OrderedDict([('left_image', 'images/0182.jpg'), ('right_image', 'images/0485.jpg')])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
    Routine pause
    Routine ready
    Routine image
    Routine display
    Routine fixation
  LoopTerminator images
  Routine thanks
