PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1707, 960]
  color = $[-1.000,-1.000,-1.000]
  expName = foodEnd
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Routines
  Routine end
    TextComponent end_text
      letterHeight = 0.1
      text = 实验结束，感谢您的参与
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    TextComponent mouse_text_end
      letterHeight = 0.07
      pos = (0, -0.9)
      text = 鼠标左键单击任意位置结束
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    MouseComponent end_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
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  Routine welcome
    TextComponent welcome_text
      letterHeight = 0.1
      text = 欢迎参加本次任务！实验中你需要根据问题和对应图片，点击数轴进行评分
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    TextComponent mouse_text0
      letterHeight = 0.07
      pos = (0, -0.9)
      text = 鼠标左键单击任意位置继续
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    MouseComponent welc_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
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  Routine trial
    TextComponent question
      letterHeight = 0.1
      pos = (0, 0.8)
      text = 你有多想在实验结束时吃到这种食物？
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    ImageComponent foodimage
      image [set every repeat] = $image
      pos = (0, 0.1)
      units = norm
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 1
      labels = "非常不想", "非常想"
      pos = (0, -0.7)
      styles = ['rating', 'triangleMarker']
      ticks = (-2, -1, 0, 1, 2)
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    TextComponent tip
      letterHeight = 0.07
      pos = (0, 0.65)
      text = （点击数轴进行评分）
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Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialVar.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('image', 'resource/0001.jpg')]),
      OrderedDict([('image', 'resource/0002.jpg')]),
      OrderedDict([('image', 'resource/0003.jpg')]),
      OrderedDict([('image', 'resource/0004.jpg')]),
      OrderedDict([('image', 'resource/0005.jpg')]),
      OrderedDict([('image', 'resource/0006.jpg')]),
      OrderedDict([('image', 'resource/0007.jpg')]),
      OrderedDict([('image', 'resource/0008.jpg')]),
      OrderedDict([('image', 'resource/0009.jpg')]),
      OrderedDict([('image', 'resource/0010.jpg')]),
      OrderedDict([('image', 'resource/0011.jpg')]),
      OrderedDict([('image', 'resource/0012.jpg')]),
      OrderedDict([('image', 'resource/0013.jpg')]),
      OrderedDict([('image', 'resource/0014.jpg')]),
      OrderedDict([('image', 'resource/0015.jpg')]),
      OrderedDict([('image', 'resource/0016.jpg')]),
      OrderedDict([('image', 'resource/0017.jpg')]),
      OrderedDict([('image', 'resource/0018.jpg')]),
      OrderedDict([('image', 'resource/0019.jpg')]),
      OrderedDict([('image', 'resource/0020.jpg')]),
      OrderedDict([('image', 'resource/0021.jpg')]),
      OrderedDict([('image', 'resource/0022.jpg')]),
      OrderedDict([('image', 'resource/0023.jpg')]),
      OrderedDict([('image', 'resource/0024.jpg')]),
      OrderedDict([('image', 'resource/0025.jpg')]),
      OrderedDict([('image', 'resource/0026.jpg')]),
      OrderedDict([('image', 'resource/0027.jpg')]),
      OrderedDict([('image', 'resource/0028.jpg')]),
      OrderedDict([('image', 'resource/0029.jpg')]),
      OrderedDict([('image', 'resource/0030.jpg')]),
      OrderedDict([('image', 'resource/0031.jpg')]),
      OrderedDict([('image', 'resource/0032.jpg')]),
      OrderedDict([('image', 'resource/0033.jpg')])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
    Routine trial
  LoopTerminator trials
  Routine end
