PsychoPy2experiment version="2020.2.10"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['姓名'], expName, expInfo['date'])
  Experiment info = {'姓名': '', '性别': '', '年龄': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [2194, 1234]
  color = $[-1,-1,-1]
  expName = wordChoice
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Routines
  Routine welc
    PolygonComponent rect_start
      fillColor = grey
      lineColor = black
      pos = (0, -490)
      saveStartStop = False
      shape = rectangle
      size = (150, 80)
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    TextComponent start_btn
      font = Songti SC
      languageStyle = Arabic
      letterHeight = 50
      pos = (0, -490)
      saveStartStop = False
      text = 开始
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    MouseComponent welc_mouse
      clickable = rect_start
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
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    ImageComponent guide_image
      image = guide.png
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    CodeComponent egi_init
      Code Type = Auto->JS
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      Before Experiment:
        # set to True before start egi exp
        netstation = False
        recording = False
      Begin Experiment:
        if netstation:
            import egi.simple as egi
            ns = egi.Netstation()
            print("import pynetstation")
            # set ip address
            ns.connect("10.10.10.42", 55513)
            ns.BeginSession()
            print("connected to netstation")
            if recording:
                ns.StartRecording()
                print("start recording")

        def send_to_NS(key_):
            if netstation:
                ns.sync()
                ns.send_event(key=key_)
  Routine pause
    TextComponent pause_tip
      font = Songti SC
      letterHeight = 50
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      text:
        请等待主试按下空格键后开始实验
        在此期间您可休息片刻
    KeyboardComponent key_start
      allowedKeys = 'space'
      forceEndRoutine = True
      store = nothing
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    CodeComponent pause_code
      Code Type = Auto->JS
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      Begin Experiment:
        isPause = False
      Begin Routine:
        if words.thisN == 0 or words.thisN % 107 != 0:
            continueRoutine = False
        else:
            isPause = True
            if netstation and recording:
                ns.StopRecording()
                print("pause recording")
      End Routine:
        if isPause:
            isPause = False
            if netstation and recording:
                ns.StartRecording()
                print("start recording")
  Routine ready
    PolygonComponent rect_ready
      fillColor = grey
      lineColor = black
      pos = (0, -490)
      saveStartStop = False
      shape = rectangle
      size = (150, 80)
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    TextComponent ready_btn
      font = Songti SC
      languageStyle = Arabic
      letterHeight = 50
      pos = (0, -490)
      saveStartStop = False
      text = 开始
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    MouseComponent ready_mouse
      clickable = rect_ready
      forceEndRoutineOnPress = valid click
      saveMouseState = never
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    CodeComponent code_ready
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
        send_to_NS(str(words.thisN).zfill(4))
  Routine thanks
    TextComponent text
      font = Songti SC
      letterHeight = 50
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text = 感谢参与！
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    CodeComponent egi_end
      Code Type = Auto->JS
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      Begin Routine:
        if netstation:
            if recording:
                ns.StopRecording()
            ns.EndSession()
            ns.disconnect()
  Routine fixation
    TextComponent fixation_text
      font = Songti SC
      languageStyle = Arabic
      letterHeight = 100
      saveStartStop = False
      stopVal [duration (s)] = np.around(np.random.uniform(0.8, 1.5), 3)
      text = +
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  Routine word
    CodeComponent getTracking
      Code Type = Auto->JS
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      Begin Routine:
        x_list = []
        y_list = []
        t_list = []
        mouse.setPos([0, -490])

        # set mark
        condition_mark = 400
        response_mark = 500
        if not isAnimate:
            condition_mark += 2
            response_mark += 4
        if option_right == "有生命":
            condition_mark += 1
            response_mark += 2
        # send stim mark
        send_to_NS(str(condition_mark).zfill(4))
      Each Frame:
        # get mouse track
        x_pos, y_pos = mouse.getPos()
        x_list.append(x_pos)
        y_list.append(y_pos)
        t_list.append(wordClock.getTime())
      End Routine:
        thisExp.addData('xTrajectory', x_list)
        thisExp.addData('yTrajectory', y_list)
        thisExp.addData('tTrajectory', t_list)
    MouseComponent mouse
      clickable = rect_left, rect_right
      forceEndRoutineOnPress = valid click
      saveMouseState = final
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    TextComponent word_item
      font = Songti SC
      letterHeight = 90
      text [set every repeat] = $item
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    PolygonComponent rect_left
      fillColor = grey
      lineColor = black
      pos = (-810, 440)
      saveStartStop = False
      shape = rectangle
      size = (300, 200)
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    PolygonComponent rect_right
      fillColor = grey
      lineColor = black
      pos = (810, 440)
      saveStartStop = False
      shape = rectangle
      size = (300, 200)
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    TextComponent op_left
      font = Songti SC
      letterHeight = 80
      pos = (-810, 440)
      text [set every repeat] = $option_left
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    TextComponent op_right
      font = Songti SC
      letterHeight = 80
      pos = (810, 440)
      saveStartStop = False
      text [set every repeat] = $option_right
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  Routine display
    CodeComponent setRect
      Code Type = Auto->JS
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      Begin Routine:
        if "rect_left" in mouse.clicked_name:
            rect_left_2.lineColor = "blue"
        else:
            rect_right_2.lineColor = "blue"
            response_mark += 1
        send_to_NS(str(response_mark).zfill(4))
      End Routine:
        rect_left_2.lineColor = "black"
        rect_right_2.lineColor = "black"
        win.mouseVisible = False
    TextComponent word_item_2
      font = Songti SC
      letterHeight = 90
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $item
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    PolygonComponent rect_left_2
      fillColor = grey
      lineColor = black
      lineWidth = 5
      pos = (-810, 440)
      saveStartStop = False
      shape = rectangle
      size = (300, 200)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    PolygonComponent rect_right_2
      fillColor = grey
      lineColor = black
      lineWidth = 5
      pos = (810, 440)
      saveStartStop = False
      shape = rectangle
      size = (300, 200)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    TextComponent op_left_2
      font = Songti SC
      letterHeight = 80
      pos = (-810, 440)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $option_left
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    TextComponent op_right_2
      font = Songti SC
      letterHeight = 80
      pos = (810, 440)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $option_right
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Flow
  Routine welc
  LoopInitiator words loopType="TrialHandler"
    conditionsFile = trialVar.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('item', '厨师'), ('option_left', '有生命'), ('option_right', '无生命'), ('isAnimate', True)]),
      OrderedDict([('item', '厨师'), ('option_left', '无生命'), ('option_right', '有生命'), ('isAnimate', True)]),
      OrderedDict([('item', '乞丐'), ('option_left', '有生命'), ('option_right', '无生命'), ('isAnimate', True)]),
      OrderedDict([('item', '乞丐'), ('option_left', '无生命'), ('option_right', '有生命'), ('isAnimate', True)]),
      OrderedDict([('item', '新娘'), ('option_left', '有生命'), ('option_right', '无生命'), ('isAnimate', True)]),
      OrderedDict([('item', '新娘'), ('option_left', '无生命'), ('option_right', '有生命'), ('isAnimate', True)]),
      OrderedDict([('item', '鸽子'), ('option_left', '有生命'), ('option_right', '无生命'), ('isAnimate', True)]),
      OrderedDict([('item', '鸽子'), ('option_left', '无生命'), ('option_right', '有生命'), ('isAnimate', True)]),
      OrderedDict([('item', '燕子'), ('option_left', '有生命'), ('option_right', '无生命'), ('isAnimate', True)]),
      OrderedDict([('item', '燕子'), ('option_left', '无生命'), ('option_right', '有生命'), ('isAnimate', True)]),
      OrderedDict([('item', '警察'), ('option_left', '有生命'), ('option_right', '无生命'), ('isAnimate', True)]),
      OrderedDict([('item', '警察'), ('option_left', '无生命'), ('option_right', '有生命'), ('isAnimate', True)]),
      OrderedDict([('item', '医生'), ('option_left', '有生命'), ('option_right', '无生命'), ('isAnimate', True)]),
      OrderedDict([('item', '医生'), ('option_left', '无生命'), ('option_right', '有生命'), ('isAnimate', True)]),
      OrderedDict([('item', '军队'), ('option_left', '有生命'), ('option_right', '无生命'), ('isAnimate', True)])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
    Routine pause
    Routine ready
    Routine word
    Routine display
    Routine fixation
  LoopTerminator words
  Routine thanks
